StationName = $TEMPLATE_STATION_NAME
IncludeSection("Constants", "CPU:lib.dld")
IncludeSection("Pressure", "CPU:lib.dld")
IncludeSection("IO", "CPU:lib.dld")

DataTable(Diagnostics, True, DATA_TABLE_ROWS) ' Diagnostics
  Sample(1, BatteryVoltage, FP2)
  Sample(1, InternalTemperature, FP2)
  Sample(1, InternalHumidity, FP2)
  Sample(1, Current, FP2)
  Sample(1, BarometricPressure, FP2)
EndTable

BeginProg
  SetSetting("PakBusTCPClients", "(drema.konectgds.com,9200)")
  SetSetting("PakBusAddress", $TEMPLATE_PAKBUS_ADDRESS)
  SetSetting("CellEnabled", True)
  SetSetting("CellAPN", "so01.VZWSTATIC")
  SetSetting("CellPwrStartTime", CELL_WINDOW_START) ' When to power up the modem
  SetSetting("CellPwrDuration", CELL_WINDOW_DURATION) ' How long is each window
  SetSetting("CellPwrRepeat", CELL_WINDOW_FREQUENCY) ' When does the window repeat, i.e. hourly
  SetSetting("CellBillingDay", CELL_BILLING_DAY) ' When to roll over the monthly usage
  SetSetting("CellKeepAlive", "www.google.com") ' If this fails, the datalogger will re-establish
  SetSetting("CellKeepAliveTime", 30) ' How often to ping test the link
  SetVx2mV(0)
  SetModemPower(True)
  
  Scan (SCAN_INTERVAL_S, Sec, 0, 0)
    PanelTemp(InternalTemperature, FILTER_FREQUENCY)
    SetVx2mV(3300)
    ReadInternalHumidity(InternalTemperature)
    SetVx2mV(5000)
    ReadBarometricPressure()
    ReadCurrent()
    SetVx2mV(0)
    Battery(BatteryVoltage)
    If BatteryVoltage < LOW_BATTERY_SHUTDOWN_V Then
      SetModemPower(False)
    ElseIf BatteryVoltage > LOW_BATTERY_SAVER_V Then
      SetModemPower(True)
    End If
    CallTable Diagnostics
  NextScan
EndProg
